<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Webcam Broadcasting"
      Description="Slicer computer with webcam." 
    />

    <Device
      Id="WebcamDevice" 
      Type="MmfVideo" 
      FrameSize="640 480"
      VideoFormat="RGB24"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="BRIGHTNESS" />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="WebcamStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    
    <Device 
      Id="WebcamCaptureDevice"
      Type="VirtualCapture"
      BaseFilename="WebcamRecording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15">
      <InputChannels>
        <InputChannel Id="WebcamStream" />
      </InputChannels>
    </Device>

  </DataCollection>
  
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18945"
    SendValidTransformsOnly="true"
    OutputChannelId="WebcamStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Webcam" EmbeddedTransformToFrame="Webcam" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>
  </CoordinateDefinitions> 

</PlusConfiguration>