<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Fake Tracking for testing purposes"
      Description="Broadcasts a fake NeedleToReference transform." 
    />

    <Device
      Id="TrackerDevice"
      Type="FakeTracker"
      AcquisitionRate="50"
      ToolReferenceFrame="Tracker"
      Mode="PivotCalibration"  >
      <DataSources>
        <DataSource Type="Tool" Id="Reference"  PortName="0" />
        <DataSource Type="Tool" Id="Stylus"  PortName="1" />
      </DataSources> 
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="TrackedUltrasoundCaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>

  </DataCollection>
  
  <CoordinateDefinitions>
    <Transform From="Stylus" To="Needle"
      Matrix="
        1 0 0 0
        0 1 0 0
        0 0 1 0
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="NeedleToReference" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>