<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Ultrasonix L14-5 Ascension"
      Description="EM sensors: 1 Probe, 2 Reference, 3 Needle." 
    />

    <Device
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      AcquisitionRate="50" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1"
      FilterAlpha="1"
      FilterDcAdaptive="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" />
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="1" />
        <DataSource Type="Tool" Id="Needle" BufferSize="500" PortName="2" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Reference"/>
          <DataSource Id="Needle"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="SonixVideo" 
      AcquisitionRate="30" 
      LocalTimeOffsetSec="-0.2976"
      IP="127.0.0.1"
      AutoClipEnabled="TRUE"
      ImageToTransducerTransformName="ImageToTransducer" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UF"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="UltrasoundStream" VideoDataSourceId="Video"/>
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedUltrasoundDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="UltrasoundStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedUltrasoundStream"/>
      </OutputChannels>
    </Device>

    <Device
      Id="TrackedUltrasoundCaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedUltrasoundStream" />
      </InputChannels>
    </Device>

  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedUltrasoundStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToReference" />
        <Transform Name="NeedleToReference" />
        <Transform Name="ImageToProbe" />
        <Transform Name="NeedleToProbe" />
      </TransformNames>
      <ImageNames>
        <Image Name="Ultrasound" EmbeddedTransformToFrame="Ultrasound" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>
	  
	<!-- TransducerToProbe transform matrix is computed from calibration matrices provided by Ultrasonix for linear GPS probe -->
    <Transform From="Transducer" To="Probe"
      Matrix="
        0.0018    0.9477   -0.0175   14.8449
       -1.0000    0.0016   -0.0052   15.0061
       -0.0052    0.0166    0.9998    0.1638
             0         0         0    1.0000" />

  </CoordinateDefinitions> 

</PlusConfiguration>